print("\\Clear");
close("\\Others");
//run("Close All");
//open("//wsl.localhost/Ubuntu-22.04/DATA/tps/labdata/projects/M23-439-DR/231004DCa_3097a_5dpf_M23-439-IT_256_Nh_merge-fsdb/231004DCa_3097a_5dpf_M23-439-IT_256_Nh_merge.nd2");
//open("E:/stageTheo/DATA/yourTeamName/labdata/projects/TA-220-DR/211203Fa_2723a_6dpf_TA-220-DR_512_N_merge-fsdb/211203Fa_2723a_6dpf_TA-220-DR_512_N_merge.nd2");
//selectImage("211203Fa_2723a_6dpf_TA-220-DR_512_N_merge.nd2");
//run("Channels Tool...");

title=split(getTitle(), "/");
title=title[lengthOf(title)-1];
rename(title);
IID=getImageID();
getDimensions(imgw, imgh, imgc, imgs, imgf);
print(imgw, imgh, imgc, imgs, imgf);
//dir=replace(getDirectory("image"),"\\","/");
dir=replace(getInfo("image.directory"),"\\","/");
tmp=split(title, ".");
suff=tmp[lengthOf(tmp)-1];
bn=replace(title, "."+suff, "");
if (matches(dir, ".*secData.*") == 1) {
	outdir=dir;
} else {
	//outdir=dir+"/"+bn+"-secData";
	outdir=makeOutDir();
}
print(outdir);
Property.set("CompositeProjection", "Sum");
Stack.setDisplayMode("composite");
//correctColors();

if ( imgs == 3 ){
	unmix23();
	IID=getImageID();
}

cropToSpecimen(IID, "crp", 1);
saveAndExport("crp");

cropToHead();
run("Canvas Size...", "width=110 height=210 position=Center zero");
saveAndExport("head");

//run("Close All");
run("Collect Garbage");

function unmix23(){
	print("unmix23");
	run("Select None");
	rename("UNMIX");
	run("Split Channels");
	selectImage("C3-UNMIX");
	run("Duplicate...", "title=REF duplicate");
	//run("Divide...", "value=2 stack");
	imageCalculator("Subtract stack", "C2-UNMIX", "REF");
	close("REF");
	run("Merge Channels...", "c1=C1-UNMIX c2=C2-UNMIX c3=C3-UNMIX create");
	rename(title);
}

function deinterleave(){
	print("deinterleave");
	getDimensions(w, h, c, s, f);
	if (imgc != c){
		print("deinterleaving.");
		run("Deinterleave", "how="+imgc);
		if (imgc == 2){
			run("Merge Channels...", "c1=["+title+" #1] c2=["+title+" #2] create ignore");
		} 
		if (imgc == 3) {
			run("Merge Channels...", "c1=["+title+" #1] c2=["+title+" #2] c3=["+title+" #3] create ignore");	
		}
		if (imgc == 4) {
			run("Merge Channels...", "c1=["+title+" #1] c2=["+title+" #2] c3=["+title+" #3] c4=["+title+" #4] create ignore");
		}
	}
}

function makeMIP(suff){
	print("makeMIP", suff);
	iid=getImageID();
	run("Z Project...", "projection=[Max Intensity]");
	correctColors();
	tbn=replace(getTitle(), ".tif", "");
	saveAs("PNG", outdir+"/"+bn+"."+suff+".mip.png");
	print(outdir+"/"+bn+"."+suff+".mip.png");
//	close();
	selectImage(iid);
}

function correctColors(){
	print("correctColors");
//	colArr=newArray("Grey", "Cyan", "Magenta", "Yellow", "Red", "Green", "Blue");
	colArr=newArray("Grey", "Red", "Green", "Blue", "Cyan", "Magenta", "Yellow");
	if (imgc == 1){
		run(colArr[0]);
	} else {
		for (col = 1; col <= imgc; col++) {
			Stack.setChannel(col);
			//print(col, colArr[col]);
			run(colArr[col]);
			resetMinAndMax;
			//wait(10);
		}
	}
}

function cropToSpecimen(iid, suff, fh){
	selectImage(iid);
	print("cropToSpecimen", iid, suff, fh, getTitle());
	
	cropToROI(iid);

	getDimensions(w, h, c, s, f);
	iid=getImageID();

	if (fh == 1) {
		side=findHead(iid);
		
		selectImage(iid);
		if (side == "B") {
			run("Rotate 90 Degrees Right");
		}
		if (side == "T") {
			run("Rotate 90 Degrees Left");
		}
		if (side == "R") {
			run("Rotate 90 Degrees Right");
			run("Rotate 90 Degrees Right");
		}
		Stack.setSlice(1);
		run("Delete Slice", "delete=slice");
	} else {
		selectImage(iid);
	}
	//waitForUser;
	
	deinterleave();
	
	correctColors();
	
}

function saveAndExport(suff){
	saveAs("Tiff", outdir+"/"+bn+"."+suff+".tif");
	print(outdir+"/"+bn+"."+suff+".tif");
	makeMIP(suff);
	//run("Nrrd ... ", "nrrd="+outdir+"/"+bn+"."+suff+".nrrd");
	exportNrrds(suff);
}	

function exportNrrds(suff){
	print("exportNrrds", suff);
	run("Duplicate...", "title=NRRD duplicate");
	getDimensions(w, h, c, s, f);
	//print(getTitle(), getImageID());
	iid=getImageID();
	run("Split Channels");
	n=nImages;
	for (i = 1; i <= c ; i++) {
		//print(i, iid-i);
		selectImage(iid-i);
		run("Nrrd ... ", "nrrd="+outdir+"/C"+i+"-"+bn+"."+suff+".nrrd");
	}
	close("*nrrd");
}

function fuseChannels(iid){
	print("fuseChannels", iid);
	selectImage(iid);
	if (imgc >1) {
		rename("tmp");
		run("Split Channels");
		imageCalculator("Add create", "C1-tmp","C2-tmp");
		selectImage("Result of C1-tmp");
		rename("tmp");
		for (c = 2; c <= imgc; c++) {
			imageCalculator("Add", "tmp","C"+c+"-tmp");
		}
		run("Grays");
		close("C*");
	} else {
		run("Duplicate...", "title=tmp duplicate");
	}
	TID=getImageID();
	return TID;
}

function cropToROI(iid){
	print("cropToROI", iid);
	run("Z Project...", "projection=[Max Intensity]");
	tid=getImageID();
	
	if (imgc > 1){
		TID=fuseChannels(tid);
	} else {
		TID=iid;
	}
	
	selectImage(TID);
	resetMinAndMax();
	
	setAutoThreshold("Default dark no-reset");
	getThreshold(lower, upper);
	print("threshold:",lower, upper);
	run("Create Selection");
	run("Enlarge...", "enlarge=-2 pixel");
	run("Enlarge...", "enlarge=2 pixel");
	run("To Bounding Box");
	run("Enlarge...", "enlarge=20 pixel");
	selectImage(iid);
	run("Restore Selection");
	run("Crop");
	wait(100);
	getDimensions(w, h, c, s, f);
	close("tmp*");
	r=w+h;
	return r
}

function findHead(id){
	print("findHead", id);
	frac=5;
	getDimensions(w, h, c, s, f);
	selectImage(id);
	if (w>h) {
		selectImage(id);
		makeRectangle(0, 0, w/frac, h);
		run("Duplicate...", "title=tmp-L duplicate");
		lh=cropToROI(getImageID());
		print("lh", lh);
		
		selectImage(id);
		makeRectangle(w-w/frac, 0, w/frac, h);
		run("Duplicate...", "title=tmp-R duplicate");
		rh=cropToROI(getImageID());
		print("rh",rh);
		if (rh>lh){
			side="R";
		} else {
			side="L";
		}
	} else {
		selectImage(id);
		makeRectangle(0, 0, w, h/frac);
		run("Duplicate...", "title=tmp-T duplicate");
		tw=cropToROI(getImageID());
		print("tw",tw);
		
		selectImage(id);
		makeRectangle(0, h-h/frac, w, h/frac);
		run("Duplicate...", "title=tmp-B duplicate");
		bw=cropToROI(getImageID());
		print("bw",bw);
		if (tw>bw){
			side="T";
		} else {
			side="B";
		}
	}
	print(side);
	//waitForUser;
	close("tmp*");
	selectImage(id);
	run("Select None");
	return side;
}

function cropToHead(){
	print("cropToHead");
	getDimensions(width, height, channels, slices, frames);
	makeRectangle(0, 0, width/3, height);
	run("Crop");
	iid=getImageID();
	cropToSpecimen(iid, "head", 0);
}

function makeOutDir(){
	indir=replace(getDirectory("image"),"\\", "/");
	outdir=indir+bn+"-secData";
	print(outdir);
	
	if ( File.isDirectory(outdir) == 0 ){
		File.makeDirectory(outdir);
	}
	return outdir;
}
	