//fsdb-rev-date: 251215

outSuff=getArgument();

dbgName="setContrast";
dbg=1; // debugging; active, when greater than 0
interactive=0;
ic=0;
if (dbg > 0) { print("::"+dbgName); }
fs=File.separator;

myPath=getInfo("macro.filepath");
print(myPath);
pArr=split(myPath, "/");
for (i = 0; i < lengthOf(pArr); i++) {
	if (matches(pArr[i], "fsdb..") == 1) {
		FSDBVERSION=pArr[i];
		FSDBDIR=replace(myPath, FSDBVERSION+"/.*", FSDBVERSION);
	} else {
		FSDBDIR=myPath+"/../../../";
	}
}
FSDBDIR=replace(myPath, FSDBVERSION+"/.*", FSDBVERSION);
print(FSDBDIR);

if (dbg > 0) { print(dbgName+": A"); }
COREMACROS=FSDBDIR+"/fsdb-core/macros/fsdb.core/";
INITLOG_FMAC=COREMACROS+"/fsdb.core.initLOG.ijm";
DEBUG_FMAC=COREMACROS+"/fsdb.core.logger.ijm";

// prepare parameters for logging
LOG=runMacro(INITLOG_FMAC, dbgName);

function debugger(str, LOG){
	if (dbg > 0){
		str=dbgName+dbg+": "+str+" "+LOG;
		runMacro(DEBUG_FMAC, str);
		dbg++;
	}
}

debugger("start", LOG);
if (interactive > 0 ) {waitForUser(dbgName+" "+ic); ic++;}
//==== fsdb-end ====

// get name and basename of active image
IID=getImageID();
title=getTitle();
tmp=split(title, ".");
bn=tmp[0];

getDimensions(width, height, channels, slices, frames);
// ensure, all channels are visible
if(channels > 1 || bitDepth() == 24 ){
	if (is("composite") == 0) {
		run("Make Composite");
	}
}

bd=bitDepth();
for (i = 1; i <= channels; i++) {
	Stack.setChannel(i);
	if (bd == 16){
		debugger("setCon 16bit", LOG);
		setMinAndMax(0, 4095); 
	}
	if (bd == 8){	
		debugger("setCon 8bit", LOG);
		setMinAndMax(0, 255);
	}
}
	
debugger("end", LOG);
